opentrons/protocol-designer 5.2.6
schemaVersion: 4
protocolName: Pipette Printer Setup
author: Alexander Hadik
description: The starting setup for drawing with a robotic pipette.
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single_gen2: {mount: left}
modules:
  thermocyclerModuleV1: {slot: span7_8_10_11}
  temperatureModuleV2: {slot: 9}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 1}
  Bio-Rad 96 Well Plate 200 µL PCR: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 5}
  Palette: {definitionId: opentrons/usascientific_12_reservoir_22ml/1, slot: 2}
pipetteTiprackAssignments:
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Green: {description: Green food coloring}
  - Blue: {description: Blue Dye}
  - Red: {description: Red food coloring}
  - Yellow: {description: Yellow food coloring}
ingredLocations:
  Palette:
    Green {volume: 20000}: A1, A5, A9
    Blue {volume: 20000}: A2, A6, A10
    Red {volume: 20000}: A3, A7, A11
    Yellow {volume: 20000}: A4, A8, A12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: Palette
  aspirate_wells: A2
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  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A1-C1, F2-H2, A3-C3, F4-H4, A5-C5, F6-H6, A7-C7, F8-H8, A9-C9, F10-H10, A11-C11, F12-H12
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: Palette
  aspirate_wells: A3
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  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A1-D1, A2-D2, D3, A4-D4, A5-D5, A6-D6, D7, A8-D8, A9-D9, A10-D10, D11, A12-D12
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Palette
  aspirate_wells: A3
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  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: E1-H1, E2, E3-H3, E4-H4, E5-H5, E6, E7-H7, E8-H8, E9-H9, E10, E11-H11, E12-H12
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  volume: 50
  times: 2
  changeTip: once
  labware: Bio-Rad 96 Well Plate 200 µL PCR
  wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
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  mix_mmFromBottom: 0.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_single_gen2, labware: Opentrons 96 Tip Rack 300 µL, well: A1}
- aspirate: {pipette: p300_single_gen2, volume: 50, labware: Palette, well: A2, offsetFromBottomMm: 1, flowRate: 46.43}
- dispense: {pipette: p300_single_gen2, volume: 50, labware: Bio-Rad 96 Well Plate 200 µL PCR, well: A1, offsetFromBottomMm: 0.5, flowRate: 46.43}
- aspirate: {pipette: p300_single_gen2, volume: 50, labware: Palette, well: A2, offsetFromBottomMm: 1, flowRate: 46.43}
- dispense: {pipette: p300_single_gen2, volume: 50, labware: Bio-Rad 96 Well Plate 200 µL PCR, well: B1, offsetFromBottomMm: 0.5, flowRate: 46.43}
- aspirate: {pipette: p300_single_gen2, volume: 50, labware: Palette, well: A2, offsetFromBottomMm: 1, flowRate: 46.43}
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