opentrons/protocol-designer 5.2.6
schemaVersion: 4
protocolName: Pipette Printer Setup
author: Alexander Hadik
description: The starting setup for drawing with a robotic pipette.
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single_gen2: {mount: left}
modules:
  thermocyclerModuleV1: {slot: span7_8_10_11}
  temperatureModuleV2: {slot: 9}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 1}
  Bio-Rad 96 Well Plate 200 µL PCR: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 5}
  Palette: {definitionId: opentrons/usascientific_12_reservoir_22ml/1, slot: 2}
pipetteTiprackAssignments:
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Green: {description: Green food coloring}
  - Blue: {description: Blue Dye}
  - Red: {description: Red food coloring}
  - Yellow: {description: Yellow food coloring}
ingredLocations:
  Palette:
    Green {volume: 20000}: A1, A5, A9
    Blue {volume: 20000}: A2, A6, A10
    Red {volume: 20000}: A3, A7, A11
    Yellow {volume: 20000}: A4, A8, A12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  stepDetails: Pipette 100 uL of Green into well A1
  pipette: p300_single_gen2
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Palette
  aspirate_wells: A1
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  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Palette
  aspirate_wells: A2
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  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A2
- stepType: moveLiquid
  stepName: transfer
  stepDetails: Pipette 100 uL of Red into well A3
  pipette: p300_single_gen2
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Palette
  aspirate_wells: A3
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  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Palette
  aspirate_wells: A4
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  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A4
- stepType: moveLiquid
  stepName: transfer
  stepDetails: transfer 1/2 A1 green into B1
  pipette: p300_single_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Bio-Rad 96 Well Plate 200 µL PCR
  aspirate_wells: A1
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  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: B1
- stepType: moveLiquid
  stepName: transfer
  stepDetails: transfer 1/2 A2 blue into B1 
  pipette: p300_single_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Bio-Rad 96 Well Plate 200 µL PCR
  aspirate_wells: A2
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  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: B1
- stepType: mix
  stepName: mix
  stepDetails: Mix B1
  pipette: p300_single_gen2
  volume: 100
  times: 5
  changeTip: always
  labware: Bio-Rad 96 Well Plate 200 µL PCR
  wells: B1
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  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  stepDetails: transfer 1/2 A3 into B2
  pipette: p300_single_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Bio-Rad 96 Well Plate 200 µL PCR
  aspirate_wells: A3
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  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: B2
- stepType: moveLiquid
  stepName: transfer
  stepDetails: Transfer 1/2 A4 into B2
  pipette: p300_single_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Bio-Rad 96 Well Plate 200 µL PCR
  aspirate_wells: A4
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  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: B2
- stepType: moveLiquid
  stepName: transfer
  stepDetails: Transfer 1/2 B1 mixture to C1
  pipette: p300_single_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Bio-Rad 96 Well Plate 200 µL PCR
  aspirate_wells: B1
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  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: C1
- stepType: moveLiquid
  stepName: transfer
  stepDetails: Transfer 1/2 B2 mixture to C1
  pipette: p300_single_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Bio-Rad 96 Well Plate 200 µL PCR
  aspirate_wells: B2
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  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: C1
- stepType: mix
  stepName: mix
  stepDetails: Mixing final mixture
  pipette: p300_single_gen2
  volume: 100
  times: 3
  changeTip: always
  labware: Bio-Rad 96 Well Plate 200 µL PCR
  wells: C1
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  mix_mmFromBottom: 0.5
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 40
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseTemperature: 37
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 100
  profileTargetLidTemp: 37
  blockIsActiveHold: true
  blockTargetTempHold: 45
  lidIsActiveHold: false
  lidOpenHold: true
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_single_gen2, labware: Opentrons 96 Tip Rack 300 µL, well: A1}
- aspirate: {pipette: p300_single_gen2, volume: 100, labware: Palette, well: A1, offsetFromBottomMm: 1, flowRate: 46.43}
- dispense: {pipette: p300_single_gen2, volume: 100, labware: Bio-Rad 96 Well Plate 200 µL PCR, well: A1, offsetFromBottomMm: 0.5, flowRate: 46.43}
- dropTip: {pipette: p300_single_gen2, labware: Trash, well: A1}
- pickUpTip: {pipette: p300_single_gen2, labware: Opentrons 96 Tip Rack 300 µL, well: B1}
- aspirate: {pipette: p300_single_gen2, volume: 100, labware: Palette, well: A2, offsetFromBottomMm: 1, flowRate: 46.43}
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