opentrons/protocol-designer 5.2.6
schemaVersion: 4
protocolName: Pipette Printer Setup
author: Alexander Hadik
description: The starting setup for drawing with a robotic pipette.
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single_gen2: {mount: left}
modules:
  thermocyclerModuleV1: {slot: span7_8_10_11}
  temperatureModuleV2: {slot: 9}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 1}
  Bio-Rad 96 Well Plate 200 µL PCR: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 5}
  Palette: {definitionId: opentrons/usascientific_12_reservoir_22ml/1, slot: 2}
pipetteTiprackAssignments:
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Green: {description: Green food coloring}
  - Blue: {description: Blue Dye}
  - Red: {description: Red food coloring}
  - Yellow: {description: Yellow food coloring}
ingredLocations:
  Palette:
    Green {volume: 20000}: A1, A5, A9
    Blue {volume: 20000}: A2, A6, A10
    Red {volume: 20000}: A3, A7, A11
    Yellow {volume: 20000}: A4, A8, A12
  Bio-Rad 96 Well Plate 200 µL PCR:
    Red {volume: 50}: G1-G3, F3, E3, E2, E1, D1, C1-C3
    Blue {volume: 50}: C5-G5, G6, G7, E7, F7, D7, C7
    Green {volume: 50}: C9-F9, G10, F11, E11, D11, C11
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Palette
  aspirate_wells: A3
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  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: C1-E1, G1, C2, E2, G2, C3, E3-G3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Palette
  aspirate_wells: A2
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  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: C5-G5, G6, C7-G7
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Palette
  aspirate_wells: A1
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  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: C9-F9, G10, C11-F11
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_single_gen2, labware: Opentrons 96 Tip Rack 300 µL, well: A1}
- aspirate: {pipette: p300_single_gen2, volume: 50, labware: Palette, well: A3, offsetFromBottomMm: 1, flowRate: 46.43}
- dispense: {pipette: p300_single_gen2, volume: 50, labware: Bio-Rad 96 Well Plate 200 µL PCR, well: C1, offsetFromBottomMm: 0.5, flowRate: 46.43}
- dropTip: {pipette: p300_single_gen2, labware: Trash, well: A1}
- pickUpTip: {pipette: p300_single_gen2, labware: Opentrons 96 Tip Rack 300 µL, well: B1}
- aspirate: {pipette: p300_single_gen2, volume: 50, labware: Palette, well: A3, offsetFromBottomMm: 1, flowRate: 46.43}
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